OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.1.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Data Acquisition
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  The Graz Visualization box will send the timeline
  markers directly to Acquisition Server using the
  TCP Tagging plugin. The server will then attach them
  appropriately to the EEG stream.
Comment
  Overview

  This scenario can be used as a first
  step to collect some training data. This
  data will later be used to train a classifier
  for online use.

  When you start this scenario, just wait 30
  seconds before it starts the instruction sequence.

  You will then be presented left / right arrows to
  let you imagine left / right hand movements.
  There will be 20 arrows of each side.

  note: the recorded files go to the
  folder where the scenario xml is located
  (${Player_ScenarioDirectory}/).

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Stimulations -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
Input stream 1=#0.Experiment information, Input stream 2=#0.Signal stream, Input stream 3=#0.Stimulations -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/motor-imagery-1-[$core{date}-$core{time}].ov
  Use compression = false
#0.Signal stream -> Temporal filter => #3
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 40.000000
  Pass band ripple (dB) = 0.500000
Data=#3, Stimulations=#0.Stimulations -> Signal display "Filtered"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
Data=#0.Signal stream, Stimulations=#0.Stimulations -> Signal display "Raw"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false

Graz Motor Imagery BCI Stimulator => #6
  Lua Script = C:/Users/arthur.desbois/Documents/dev/openvibeScripting/openvibe-automation/spectralpower-templates/mi-stimulations.lua
  Number of Trials for Each Class = 20
  First Class = OVTK_GDF_Left
  Second Class = OVTK_GDF_Right
  Baseline Duration (in sec) = 20
  Wait For Beep Duration (in sec) = 2
  Wait For Cue Duration (in sec) = 1
  Display Cue Duration (in sec) = 1.250
  Feedback Duration (in sec) = 3.750
  End of Trial Minimum Duration (in sec) = 1.500
  End of Trial Maximum Duration (in sec) = 3.500
Stimulations=#6 -> Graz visualization
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 5
  Positive feedback only = false
