OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.1.0)

Generic stream reader => #0
  Filename = C:/Program Files/openvibe-3.1.0-64bit/share/openvibe/scenarios/signals/bci-motor-imagery.ov
#0.Output stream 2 -> Channel Selector "C3;C4;FC3;FC4;C5;C1" => #1
  Channel List = C3;C4;FC3;FC4;C5;C1
  Action = Select
  Channel Matching Method = Smart
-> Temporal Filter => #2
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 12
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.0625
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP => #6
  Equation = log10(1+x)
Data=#6 -> Signal display "Alpha band Power"
  Display Mode = Scan
  Auto vertical scale = Global
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 160
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Data=#2, Stimulations=#0.Output stream 3 -> Signal display "Alpha band signal"
  Display Mode = Scan
  Auto vertical scale = Global
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#1 -> Temporal Filter => #9
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 12
  High Cut-off Frequency (Hz) = 24
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.0625
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP => #13
  Equation = log10(1+x)
Data=#13 -> Signal display "Beta band Power"
  Display Mode = Scan
  Auto vertical scale = Global
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 160
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Data=#9, Stimulations=#0.Output stream 3 -> Signal display "Beta band signal"
  Display Mode = Scan
  Auto vertical scale = Global
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
